CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:26
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Elsewhere...| /home/ubuntu/bucket/Images/BBBC021/experiment_01_resized/
    Name of the file:LoadData.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Perturbation,Group,Batch
    Rescale intensities?:Yes

ColorToGray:[module_num:2|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notes:['']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
    Select the input image:input
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:Red
    Convert green to gray?:Yes
    Name the output image:Green
    Convert blue to gray?:Yes
    Name the output image:Blue
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
MeasureImageQuality:[module_num:3|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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:4
    Threshold count:1
    Select the images to measure:Blue, Green, Red
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:10
    Spatial scale for blur measurements:20
    Spatial scale for blur measurements:50
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
MeasureImageQuality:[module_num:4|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
    Calculate metrics for which images?:Select...
    Image count:2
    Scale count:1
    Threshold count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:Blue
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Select the images to measure:Blue
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground

IdentifyPrimaryObjects:[module_num:5|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notes:['Identifies ALL nuclei in image though we will only take measurements on those NOT touching the border of the image (filtered at a later step)']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
    Select the input image:Blue
    Name the primary objects to be identified:NucleiIncludingEdges
    Typical diameter of objects, in pixel units (Min,Max):12,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:25
    Suppress local maxima that are closer than this minimum allowed distance:20
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:3
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.005,0.6
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:6|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notes:['Identifies ALL cells in image though we will only take measurements on those coming from nuclei NOT touching the border of the image (filtered at a later step)']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
    Select the input objects:NucleiIncludingEdges
    Name the objects to be identified:CellsIncludingEdges
    Select the method to identify the secondary objects:Propagation
    Select the input image:Green
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:2
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.005,.06
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
FilterObjects:[module_num:7|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notes:['Filter the object sets that do have edges (NucleiIncludingEdges and CellIncludingEdges) so we have additional object sets that do NOT touch the edge of the well that we will use for measurements (Nuclei and Cells).']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
    Select the objects to filter:NucleiIncludingEdges
    Name the output objects:Nuclei
    Select the filtering mode:Image or mask border
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    Additional object count:1
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    Keep removed objects as a separate set?:No
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    Select additional object to relabel:CellsIncludingEdges
    Name the relabeled objects:Cells
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
IdentifyTertiaryObjects:[module_num:8|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureColocalization:[module_num:9|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notes:['Have to Check ->Beth mentioned something->either have it at fastest or  have the Costes OFF']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
    Select images to measure:Blue, Green, Red
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Nuclei, Cytoplasm, Cells
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureGranularity:[module_num:10|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
    Select images to measure:Blue, Green, Red
    Measure within objects?:Yes
    Select objects to measure:Nuclei, Cytoplasm, Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.5
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensity:[module_num:11|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
    Select images to measure:Blue, Green, Red
    Select objects to measure:Nuclei, Cytoplasm, Cells

MeasureObjectNeighbors:[module_num:12|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:5
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:13|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:1
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:14|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensityDistribution:[module_num:15|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
    Select images to measure:Blue, Green, Red
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:Cells
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:16|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
    Select object sets to measure:Cells, Nuclei, Cytoplasm
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:17|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
    Select images to measure:Blue, Green, Red
    Select objects to measure:Nuclei, Cytoplasm, Cells
    Enter how many gray levels to measure the texture at:256
    Hidden:3
    Measure whole images or objects?:Objects
    Texture scale to measure:3
    Texture scale to measure:5
    Texture scale to measure:10

MeasureImageAreaOccupied:[module_num:18|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
    Measure the area occupied by:Objects
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    Select object sets to measure:Cells, CellsIncludingEdges, Cytoplasm, Nuclei, NucleiIncludingEdges

MaskImage:[module_num:19|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notes:['Remove signal in the image that is in cells (including cells that touch the well edge) so that only background remains in the image.', 'Used downstream to measure the intensity of the image without cells present.']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
    Select the input image:Blue
    Name the output image:Blue_BackgroundOnly
    Use objects or an image as a mask?:Objects
    Select object for mask:CellsIncludingEdges
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    Invert the mask?:Yes

MaskImage:[module_num:20|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notes:['Remove signal in the image that is in cells (including cells that touch the well edge) so that only background remains in the image.', 'Used downstream to measure the intensity of the image without cells present.']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
    Select the input image:Green
    Name the output image:Green_BackgroundOnly
    Use objects or an image as a mask?:Objects
    Select object for mask:CellsIncludingEdges
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    Invert the mask?:Yes

MaskImage:[module_num:21|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notes:['Remove signal in the image that is in cells (including cells that touch the well edge) so that only background remains in the image.', 'Used downstream to measure the intensity of the image without cells present.']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
    Select the input image:Red
    Name the output image:Red_BackgroundOnly
    Use objects or an image as a mask?:Objects
    Select object for mask:CellsIncludingEdges
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    Invert the mask?:Yes

MeasureImageIntensity:[module_num:22|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notes:['Measures the ntensity of the whole image (AGP, BFHigh, BFLow, Brightfield, DNA, ER, Mito, RNA) as well as the intensity of the image only in regions without cells (* _BackgroundOnly).']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
    Select images to measure:Blue, Blue_BackgroundOnly, Green, Green_BackgroundOnly, Red, Red_BackgroundOnly
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
OverlayOutlines:[module_num:23|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:input
    Name the output image:Outlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FF00D2
    Select objects to display:Nuclei
    Select outline color:#F7DE00
    Select objects to display:Cells

SaveImages:[module_num:24|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Outlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:input
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:png
    Output file location:Default Output Folder sub-folder|overlays/cropped
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:25|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notes:['We explicitly set which measurement types to export so that we do NOT export measurements of the objects touching the well edges as we ONLY want them for masking and not to use for measurements.', '', 'We have turned off the exporting of measurements starting with the word Location for Cells and Cytoplasm and the duplicate Number_Object_Number from Cells, because a) those measurements are not useful on their own (only relative to one another, which is not an analysis we currently ever perform) and b) we were previously exporting >2000 measurements for those compartments, which would complicate using SQLite if not manually compiled to allow >2000 columns.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|\g<Folder2>_\g<Folder3>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Cytoplasm|RadialDistribution_MeanFrac_Green_1of4,Cytoplasm|RadialDistribution_MeanFrac_Green_4of4,Cytoplasm|RadialDistribution_MeanFrac_Green_2of4,Cytoplasm|RadialDistribution_MeanFrac_Green_3of4,Cytoplasm|RadialDistribution_MeanFrac_Red_1of4,Cytoplasm|RadialDistribution_MeanFrac_Red_4of4,Cytoplasm|RadialDistribution_MeanFrac_Red_2of4,Cytoplasm|RadialDistribution_MeanFrac_Red_3of4,Cytoplasm|RadialDistribution_MeanFrac_Blue_2of4,Cytoplasm|RadialDistribution_MeanFrac_Blue_4of4,Cytoplasm|RadialDistribution_MeanFrac_Blue_3of4,Cytoplasm|RadialDistribution_MeanFrac_Blue_1of4,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

ExportToDatabase:[module_num:26|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
    Output file location:Default Input Folder sub-folder|Documents/2405_CellPainting/Documents/2405_CellPainting_experiment2/outline
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:Yes
    Calculate the per-image standard deviation values of object measurements?:Yes
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    Export measurements for all objects to the database?:None
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Experiment name:MyExpt
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    Export object relationships?:Yes
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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